---
API: 3
OpenSesame: 4.1.8
Platform: nt
---
set width 1024
set title "Yeni deney"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\ASUS\\Desktop\\LİZGE"
set disable_garbage_collection yes
set description "The main experiment item"
set canvas_backend psycho
set background "#3d3846"

define loop asama1_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Başka bir öğeyi tekrar tekrar çalıştırır"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 image "Beach 2.jpg"
	setcycle 0 valence_image "6,323529412"
	setcycle 0 question_option1 "1(hiç hoş değil)"
	setcycle 0 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 0 question_option2 "2(pek hoş değil)"
	setcycle 0 question_option3 "3(nötr)"
	setcycle 0 question_option4 "4(biraz hoş)"
	setcycle 0 question_option5 "5(çok hoş)"
	setcycle 1 image "Cliff diver 1.jpg"
	setcycle 1 valence_image "4,833333333"
	setcycle 1 question_option1 "1(hiç hoş değil)"
	setcycle 1 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 1 question_option2 "2(pek hoş değil)"
	setcycle 1 question_option3 "3(nötr)"
	setcycle 1 question_option4 "4(biraz hoş)"
	setcycle 1 question_option5 "5(çok hoş)"
	setcycle 2 image "Desert 1.jpg"
	setcycle 2 valence_image "4,0"
	setcycle 2 question_option1 "1(hiç hoş değil)"
	setcycle 2 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 2 question_option2 "2(pek hoş değil)"
	setcycle 2 question_option3 "3(nötr)"
	setcycle 2 question_option4 "4(biraz hoş)"
	setcycle 2 question_option5 "5(çok hoş)"
	setcycle 3 image "Dirt 2.jpg"
	setcycle 3 valence_image "5,598039216"
	setcycle 3 question_option1 "1(hiç hoş değil)"
	setcycle 3 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 3 question_option2 "2(pek hoş değil)"
	setcycle 3 question_option3 "3(nötr)"
	setcycle 3 question_option4 "4(biraz hoş)"
	setcycle 3 question_option5 "5(çok hoş)"
	setcycle 4 image "Fire 1.jpg"
	setcycle 4 valence_image "4,407407407"
	setcycle 4 question_option1 "1(hiç hoş değil)"
	setcycle 4 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 4 question_option2 "2(pek hoş değil)"
	setcycle 4 question_option3 "3(nötr)"
	setcycle 4 question_option4 "4(biraz hoş)"
	setcycle 4 question_option5 "5(çok hoş)"
	setcycle 5 image "Flowers 1.jpg"
	setcycle 5 valence_image "5,762376238"
	setcycle 5 question_option1 "1(hiç hoş değil)"
	setcycle 5 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 5 question_option2 "2(pek hoş değil)"
	setcycle 5 question_option3 "3(nötr)"
	setcycle 5 question_option4 "4(biraz hoş)"
	setcycle 5 question_option5 "5(çok hoş)"
	setcycle 6 image "Grass 2.jpg"
	setcycle 6 valence_image "4,941176471"
	setcycle 6 question_option1 "1(hiç hoş değil)"
	setcycle 6 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 6 question_option2 "2(pek hoş değil)"
	setcycle 6 question_option3 "3(nötr)"
	setcycle 6 question_option4 "4(biraz hoş)"
	setcycle 6 question_option5 "5(çok hoş)"
	setcycle 7 image "Lake 1.jpg"
	setcycle 7 valence_image "6,254901961"
	setcycle 7 question_option1 "1(hiç hoş değil)"
	setcycle 7 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 7 question_option2 "2(pek hoş değil)"
	setcycle 7 question_option3 "3(nötr)"
	setcycle 7 question_option4 "4(biraz hoş)"
	setcycle 7 question_option5 "5(çok hoş)"
	setcycle 8 image "Lake 2.jpg"
	setcycle 8 valence_image "6,392156863"
	setcycle 8 question_option1 "1(hiç hoş değil)"
	setcycle 8 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 8 question_option2 "2(pek hoş değil)"
	setcycle 8 question_option3 "3(nötr)"
	setcycle 8 question_option4 "4(biraz hoş)"
	setcycle 8 question_option5 "5(çok hoş)"
	setcycle 9 image "Rocks 1.jpg"
	setcycle 9 valence_image "4,676470588"
	setcycle 9 question_option1 "1(hiç hoş değil)"
	setcycle 9 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 9 question_option2 "2(pek hoş değil)"
	setcycle 9 question_option3 "3(nötr)"
	setcycle 9 question_option4 "4(biraz hoş)"
	setcycle 9 question_option5 "5(çok hoş)"
	setcycle 10 image "Sunset 2.jpg"
	setcycle 10 valence_image "6,009803922"
	setcycle 10 question_option1 "1(hiç hoş değil)"
	setcycle 10 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 10 question_option2 "2(pek hoş değil)"
	setcycle 10 question_option3 "3(nötr)"
	setcycle 10 question_option4 "4(biraz hoş)"
	setcycle 10 question_option5 "5(çok hoş)"
	setcycle 11 image "Thunderstorm 1.jpg"
	setcycle 11 valence_image "3,166666667"
	setcycle 11 question_option1 "1(hiç hoş değil)"
	setcycle 11 question_text1 "Bu görseli ne kadar hoş buldunuz?"
	setcycle 11 question_option2 "2(pek hoş değil)"
	setcycle 11 question_option3 "3(nötr)"
	setcycle 11 question_option4 "4(biraz hoş)"
	setcycle 11 question_option5 "5(çok hoş)"
	run new_sequence

define sketchpad asama1_sketchpad
	set duration keypress
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="Birazdan karşınıza deneyde kullanılacak görseller gelecektir. <br />Lütfen dikkatlice izleyiniz.<br />Görsellerin ardından görselleri ne kadar hoş bulduğunuza dair soru ekranı gelecektir.<br />Size doğru gelen seçeneği işaretleyiniz.<br />Hazır olduğunuzda 'Boşluk' tuşuna basınız." x=0 y=0 z_index=0

define loop asama2_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Başka bir öğeyi tekrar tekrar çalıştırır"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 sound "major1.wav"
	setcycle 0 valence_sound major
	setcycle 0 question_text2 "Bu sesi ne kadar hoş buldunuz?"
	setcycle 0 question_option1 "1(hiç hoş değil)"
	setcycle 0 question_option2 "2(pek hoş değil)"
	setcycle 0 question_option3 "3(nötr)"
	setcycle 0 question_option4 "4(biraz hoş)"
	setcycle 0 question_option5 "5(çok hoş)"
	setcycle 1 sound "major2.wav"
	setcycle 1 valence_sound major
	setcycle 1 question_text2 "Bu sesi ne kadar hoş buldunuz?"
	setcycle 1 question_option1 "1(hiç hoş değil)"
	setcycle 1 question_option2 "2(pek hoş değil)"
	setcycle 1 question_option3 "3(nötr)"
	setcycle 1 question_option4 "4(biraz hoş)"
	setcycle 1 question_option5 "5(çok hoş)"
	setcycle 2 sound "minor1.wav"
	setcycle 2 valence_sound minor
	setcycle 2 question_text2 "Bu sesi ne kadar hoş buldunuz?"
	setcycle 2 question_option1 "1(hiç hoş değil)"
	setcycle 2 question_option2 "2(pek hoş değil)"
	setcycle 2 question_option3 "3(nötr)"
	setcycle 2 question_option4 "4(biraz hoş)"
	setcycle 2 question_option5 "5(çok hoş)"
	setcycle 3 sound "minor2.wav"
	setcycle 3 valence_sound minor
	setcycle 3 question_text2 "Bu sesi ne kadar hoş buldunuz?"
	setcycle 3 question_option1 "1(hiç hoş değil)"
	setcycle 3 question_option2 "2(pek hoş değil)"
	setcycle 3 question_option3 "3(nötr)"
	setcycle 3 question_option4 "4(biraz hoş)"
	setcycle 3 question_option5 "5(çok hoş)"
	run new_1_sequence

define sketchpad asama2_sketchpad
	set duration keypress
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="Birazdan karşınıza deneyde kullanılacak sesler gelecektir. <br />Lütfen dikkatlice dinleyiniz.<br />Görsellerin ardından sesleri ne kadar hoş bulduğunuza dair soru ekranı gelecektir.<br />Size doğru gelen seçeneği işaretleyiniz.<br />Hazır olduğunuzda 'Boşluk' tuşuna basınız." x=0 y=0 z_index=0

define loop asama3_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Başka bir öğeyi tekrar tekrar çalıştırır"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 image_3 "Beach 2.jpg"
	setcycle 0 sound_3 "major2.wav"
	setcycle 0 congruency congured
	setcycle 0 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 0 question_option1 "1(hiç hoş değil)"
	setcycle 0 question_option2 "2(pek hoş değil)"
	setcycle 0 question_option3 "3(nötr)"
	setcycle 0 question_option4 "4(biraz hoş)"
	setcycle 0 question_option5 "5(çok hoş)"
	setcycle 1 image_3 "Cliff diver 1.jpg"
	setcycle 1 sound_3 "major1.wav"
	setcycle 1 congruency incongured
	setcycle 1 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 1 question_option1 "1(hiç hoş değil)"
	setcycle 1 question_option2 "2(pek hoş değil)"
	setcycle 1 question_option3 "3(nötr)"
	setcycle 1 question_option4 "4(biraz hoş)"
	setcycle 1 question_option5 "5(çok hoş)"
	setcycle 2 image_3 "Desert 1.jpg"
	setcycle 2 sound_3 "minor2.wav"
	setcycle 2 congruency congured
	setcycle 2 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 2 question_option1 "1(hiç hoş değil)"
	setcycle 2 question_option2 "2(pek hoş değil)"
	setcycle 2 question_option3 "3(nötr)"
	setcycle 2 question_option4 "4(biraz hoş)"
	setcycle 2 question_option5 "5(çok hoş)"
	setcycle 3 image_3 "Dirt 2.jpg"
	setcycle 3 sound_3 "minor1.wav"
	setcycle 3 congruency neutral
	setcycle 3 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 3 question_option1 "1(hiç hoş değil)"
	setcycle 3 question_option2 "2(pek hoş değil)"
	setcycle 3 question_option3 "3(nötr)"
	setcycle 3 question_option4 "4(biraz hoş)"
	setcycle 3 question_option5 "5(çok hoş)"
	setcycle 4 image_3 "Fire 1.jpg"
	setcycle 4 sound_3 "minor1.wav"
	setcycle 4 congruency congured
	setcycle 4 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 4 question_option1 "1(hiç hoş değil)"
	setcycle 4 question_option2 "2(pek hoş değil)"
	setcycle 4 question_option3 "3(nötr)"
	setcycle 4 question_option4 "4(biraz hoş)"
	setcycle 4 question_option5 "5(çok hoş)"
	setcycle 5 image_3 "Flowers 1.jpg"
	setcycle 5 sound_3 "minor2.wav"
	setcycle 5 congruency incongured
	setcycle 5 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 5 question_option1 "1(hiç hoş değil)"
	setcycle 5 question_option2 "2(pek hoş değil)"
	setcycle 5 question_option3 "3(nötr)"
	setcycle 5 question_option4 "4(biraz hoş)"
	setcycle 5 question_option5 "5(çok hoş)"
	setcycle 6 image_3 "Grass 2.jpg"
	setcycle 6 sound_3 "minor2.wav"
	setcycle 6 congruency neutral
	setcycle 6 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 6 question_option1 "1(hiç hoş değil)"
	setcycle 6 question_option2 "2(pek hoş değil)"
	setcycle 6 question_option3 "3(nötr)"
	setcycle 6 question_option4 "4(biraz hoş)"
	setcycle 6 question_option5 "5(çok hoş)"
	setcycle 7 image_3 "Lake 1.jpg"
	setcycle 7 sound_3 "major1.wav"
	setcycle 7 congruency congured
	setcycle 7 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 7 question_option1 "1(hiç hoş değil)"
	setcycle 7 question_option2 "2(pek hoş değil)"
	setcycle 7 question_option3 "3(nötr)"
	setcycle 7 question_option4 "4(biraz hoş)"
	setcycle 7 question_option5 "5(çok hoş)"
	setcycle 8 image_3 "Lake 2.jpg"
	setcycle 8 sound_3 "major2.wav"
	setcycle 8 congruency neutral
	setcycle 8 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 8 question_option1 "1(hiç hoş değil)"
	setcycle 8 question_option2 "2(pek hoş değil)"
	setcycle 8 question_option3 "3(nötr)"
	setcycle 8 question_option4 "4(biraz hoş)"
	setcycle 8 question_option5 "5(çok hoş)"
	setcycle 9 image_3 "Rocks 1.jpg"
	setcycle 9 sound_3 "major1.wav"
	setcycle 9 congruency neutral
	setcycle 9 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 9 question_option1 "1(hiç hoş değil)"
	setcycle 9 question_option2 "2(pek hoş değil)"
	setcycle 9 question_option3 "3(nötr)"
	setcycle 9 question_option4 "4(biraz hoş)"
	setcycle 9 question_option5 "5(çok hoş)"
	setcycle 10 image_3 "Sunset 2.jpg"
	setcycle 10 sound_3 "minor1.wav"
	setcycle 10 congruency incongured
	setcycle 10 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 10 question_option1 "1(hiç hoş değil)"
	setcycle 10 question_option2 "2(pek hoş değil)"
	setcycle 10 question_option3 "3(nötr)"
	setcycle 10 question_option4 "4(biraz hoş)"
	setcycle 10 question_option5 "5(çok hoş)"
	setcycle 11 image_3 "Thunderstorm 1.jpg"
	setcycle 11 sound_3 "major2.wav"
	setcycle 11 congruency incongured
	setcycle 11 question_text3 "Bu uyaranları birlikte ne kadar hoş buldunuz?"
	setcycle 11 question_option1 "1(hiç hoş değil)"
	setcycle 11 question_option2 "2(pek hoş değil)"
	setcycle 11 question_option3 "3(nötr)"
	setcycle 11 question_option4 "4(biraz hoş)"
	setcycle 11 question_option5 "5(çok hoş)"
	run new_2_sequence

define sketchpad asama3_sketchpad
	set duration keypress
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="Birazdan karşınıza deneyde kullanılacak uyaranlar gelecektir. <br />Lütfen dikkatlice izleyiniz.<br />Ardından uyaranları birlikte ne kadar hoş bulduğunuza dair soru ekranı gelecektir.<br />Size doğru gelen seçeneği işaretleyiniz.<br />Hazır olduğunuzda 'Boşluk' tuşuna basınız." x=0 y=0 z_index=0

define form_multiple_choice bfi10_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "{question_text_bfi}"
	__options__
	{question_option1}
	{question_option2}
	{question_option3}
	{question_option4}
	{question_option5}
	__end__
	set margins "50;50;50;50"
	set form_var response_bfi10
	set form_title "Soru-Cevap"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop bfi10_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Başka bir öğeyi tekrar tekrar çalıştırır"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 question_text_bfi "Kendimi içine kapanık biri olarak görüyorum. "
	setcycle 0 question_id bfi_1
	setcycle 0 quesion_option1 "1(hiç uygun değil)"
	setcycle 0 question_option2 "2(pek uygun değil)"
	setcycle 0 question_option3 "3(nötr)"
	setcycle 0 question_option4 "4(biraz uygun)"
	setcycle 0 question_option5 "5(tamamen uygun)"
	setcycle 1 question_text_bfi "Kendimi dışa dönük, sosyal biri olarak görüyorum."
	setcycle 1 question_id bfi_2
	setcycle 1 quesion_option1 "1(hiç uygun değil)"
	setcycle 1 question_option2 "2(pek uygun değil)"
	setcycle 1 question_option3 "3(nötr)"
	setcycle 1 question_option4 "4(biraz uygun)"
	setcycle 1 question_option5 "5(tamamen uygun)"
	setcycle 2 question_text_bfi "Kendimi genellikle güvenilir biri olarak görüyorum"
	setcycle 2 question_id bfi_3
	setcycle 2 quesion_option1 "1(hiç uygun değil)"
	setcycle 2 question_option2 "2(pek uygun değil)"
	setcycle 2 question_option3 "3(nötr)"
	setcycle 2 question_option4 "4(biraz uygun)"
	setcycle 2 question_option5 "5(tamamen uygun)"
	setcycle 3 question_text_bfi "Kendimi başkalarının hatasını bulma eğiliminde biri olarak görüyorum."
	setcycle 3 question_id bfi_4
	setcycle 3 quesion_option1 "1(hiç uygun değil)"
	setcycle 3 question_option2 "2(pek uygun değil)"
	setcycle 3 question_option3 "3(nötr)"
	setcycle 3 question_option4 "4(biraz uygun)"
	setcycle 3 question_option5 "5(tamamen uygun)"
	setcycle 4 question_text_bfi "Kendimi yavaş hareket etme eğiliminde olan biri olarak görüyorum."
	setcycle 4 question_id bfi_5
	setcycle 4 quesion_option1 "1(hiç uygun değil)"
	setcycle 4 question_option2 "2(pek uygun değil)"
	setcycle 4 question_option3 "3(nötr)"
	setcycle 4 question_option4 "4(biraz uygun)"
	setcycle 4 question_option5 "5(tamamen uygun)"
	setcycle 5 question_text_bfi "Kendimi bir işi tam yapacak biri olarak görüyorum"
	setcycle 5 question_id bfi_6
	setcycle 5 quesion_option1 "1(hiç uygun değil)"
	setcycle 5 question_option2 "2(pek uygun değil)"
	setcycle 5 question_option3 "3(nötr)"
	setcycle 5 question_option4 "4(biraz uygun)"
	setcycle 5 question_option5 "5(tamamen uygun)"
	setcycle 6 question_text_bfi "Kendimi rahat ve stresle başa çıkabilen biri olarak görüyorum."
	setcycle 6 question_id bfi_7
	setcycle 6 quesion_option1 "1(hiç uygun değil)"
	setcycle 6 question_option2 "2(pek uygun değil)"
	setcycle 6 question_option3 "3(nötr)"
	setcycle 6 question_option4 "4(biraz uygun)"
	setcycle 6 question_option5 "5(tamamen uygun)"
	setcycle 7 question_text_bfi "Kendimi kolay sinirlenen biri olarak görüyorum"
	setcycle 7 question_id bfi_8
	setcycle 7 quesion_option1 "1(hiç uygun değil)"
	setcycle 7 question_option2 "2(pek uygun değil)"
	setcycle 7 question_option3 "3(nötr)"
	setcycle 7 question_option4 "4(biraz uygun)"
	setcycle 7 question_option5 "5(tamamen uygun)"
	setcycle 8 question_text_bfi "Kendimi çok az sanatsal ilgisi olan biri olarak görüyorum."
	setcycle 8 question_id bfi_9
	setcycle 8 quesion_option1 "1(hiç uygun değil)"
	setcycle 8 question_option2 "2(pek uygun değil)"
	setcycle 8 question_option3 "3(nötr)"
	setcycle 8 question_option4 "4(biraz uygun)"
	setcycle 8 question_option5 "5(tamamen uygun)"
	setcycle 9 question_text_bfi "Kendimi yaratıcı biri olarak görüyorum"
	setcycle 9 question_id bfi_10
	setcycle 9 quesion_option1 "1(hiç uygun değil)"
	setcycle 9 question_option2 "2(pek uygun değil)"
	setcycle 9 question_option3 "3(nötr)"
	setcycle 9 question_option4 "4(biraz uygun)"
	setcycle 9 question_option5 "5(tamamen uygun)"
	run bfi10_sequence

define sequence bfi10_sequence
	set flush_keyboard yes
	set description "Sırayla bir dizi öğeyi çalıştırır"
	run bfi10_form_multiple_choice True
	run logger_bfi10 True

define sketchpad bfi10_sketchpad
	set duration keypress
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="Birazdan karşınıza birtakım sorular gelecektir. <br />Lütfen dikkatlice okuyunuz.<br />Size doğru gelen seçeneği işaretleyiniz.<br />Hazır olduğunuzda 'Boşluk' tuşuna basınız." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Sırayla bir dizi öğeyi çalıştırır"
	run getting_started True
	run welcome True
	run info_form_text_display True
	run onam_form_text_display True
	run asama1_sketchpad True
	run asama1_loop True
	run asama2_sketchpad True
	run asama2_loop True
	run asama3_sketchpad True
	run asama3_loop True
	run bfi10_sketchpad True
	run bfi10_loop True
	run new_1_sketchpad True

define sketchpad fixation2_sketchpad
	set duration 500
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=75 html=yes show_if=True text="+" x=0 y=0 z_index=0

define sketchpad fixation3_sketchpad
	set duration 500
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=75 html=yes show_if=True text="+" x=0 y=0 z_index=0

define sketchpad fixation_sketchpad
	set duration 500
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=70 html=yes show_if=True text="+" x=0 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad gorsel_isitsel_sketchpad
	set duration 0
	set description "Uyarıcıları görüntüler"
	draw image center=1 file="[image_3]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad image_sketchpad
	set duration 3000
	set description "Uyarıcıları görüntüler"
	draw image center=1 file="[image]" scale=1 show_if=always x=0 y=0 z_index=0

define form_text_display info_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "Bilgilendirme Formu"
	__form_text__
	Bu çalışma, bireylerin sahip olduğu kişilik yapılarının (Beş Faktör Kişilik
	Modeli çerçevesinde), multimedya unsurları arasındaki estetik uyumu nasıl
	deneyimlediğini anlamak amacıyla yürütülmektedir. Elde edilen veriler,
	nöroestetik alanındaki literatüre katkı sağlamak amacıyla kullanılacaktır.
	
	Uygulama Prosedürü
	Çalışmaya katılımınız yaklaşık 20 dakika sürecektir. Süreç şu adımları
	içerir:
	- Demografik ve Psikometrik Ölçüm: Kişilik özelliklerinizi belirlemeye yönelik
	standart bir kişilik envanterinin doldurulması.
	- Deneysel Görev: Bilgisayar ekranı üzerinden sunulacak olan eş zamanlı görsel
	(grafik/imge) ve işitsel (ses/melodi) uyaran gruplarının izlenmesi/dinlenmesi.
	- Sübjektif Değerlendirme: Her bir uyaran çiftinin "uyum", "beğeni" veriler 
	"estetik değer" açısından dijital ölçekler (Likert tipi) üzerinden puanlanması.
	
	Devam etmek için "OK" butonuna basınız.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define logger logger_asama1
	set description "Deneysel verileri kaydeder"
	set auto_log no
	log image
	log valence_image
	log response_gorsel
	log question_option1
	log question_option2
	log question_option3
	log question_option4
	log question_option5
	log question_text1

define logger logger_asama2
	set description "Deneysel verileri kaydeder"
	set auto_log no
	log sound
	log valence_sound
	log response_sound
	log question_option1
	log question_option2
	log question_option3
	log question_option4
	log question_option5
	log question_text2

define logger logger_asama3
	set description "Deneysel verileri kaydeder"
	set auto_log no
	log congruency
	log response_asama3
	log question_option1
	log question_option2
	log question_option3
	log question_option4
	log question_option5
	log question_text3

define logger logger_bfi10
	set description "Deneysel verileri kaydeder"
	set auto_log no
	log question_id
	log question_text
	log response_bfi10
	log question_text_bfi
	log question_option1
	log question_option2
	log question_option4
	log question_option3
	log question_option5

define form_multiple_choice new_1_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "{question_text2}"
	__options__
	{question_option1}
	{question_option2}
	{question_option3}
	{question_option4}
	{question_option5}
	__end__
	set margins "50;50;50;50"
	set form_var response_sound
	set form_title Ses
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence new_1_sequence
	set flush_keyboard yes
	set description "Sırayla bir dizi öğeyi çalıştırır"
	run fixation2_sketchpad True
	run new_sampler True
	run new_sketchpad True
	run new_1_form_multiple_choice True
	run logger_asama2 True

define sketchpad new_1_sketchpad
	set duration keypress
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=70 html=yes show_if=True text="Deneyimiz sonlanmıştır.<br />Katılımınız için teşekkür ederiz." x=0 y=0 z_index=0

define form_multiple_choice new_2_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "{question_text3}"
	__options__
	{question_option1}
	{question_option2}
	{question_option3}
	{question_option4}
	{question_option5}
	__end__
	set margins "50;50;50;50"
	set form_var response_asama3
	set form_title Uyaran
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence new_2_sequence
	set flush_keyboard yes
	set description "Sırayla bir dizi öğeyi çalıştırır"
	run fixation3_sketchpad True
	run gorsel_isitsel_sketchpad True
	run sound_3_sampler True
	run new_2_form_multiple_choice True
	run logger_asama3 True

define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "{question_text1}"
	__options__
	{question_option1}
	{question_option2}
	{question_option3}
	{question_option4}
	{question_option5}
	__end__
	set margins "50;50;50;50"
	set form_var response_gorsel
	set form_title "Görsel"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "[sound]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description ".wav veya .ogg formatında bir ses dosyasını çalar"

define sequence new_sequence
	set flush_keyboard yes
	set description "Sırayla bir dizi öğeyi çalıştırır"
	run fixation_sketchpad True
	run image_sketchpad True
	run new_form_multiple_choice True
	run logger_asama1 True

define sketchpad new_sketchpad
	set duration 300
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="" x=0 y=0 z_index=0

define form_text_display onam_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "Onam Formu"
	__form_text__
	Bu çalışma İstanbul Ticaret Üniversitesi Psikoloji Laboratuvarı stajı
	kapsamında gerçekleşecektir. Deneye katılım tamamen gönüllülük esasına dayalıdır.
	Çalışmanın herhangi bir aşamasında, hiçbir gerekçe gösterme gerekmeksizin
	sonlandırabilirsiniz. Kimlik bilgileriniz kesinlikle kayıt altına alınmayacaktır.
	Verileriniz anonim olarak saklanacaktır. Toplanan veriler sadece toplu
	istatistiksel analizler için kullanılacak; bireysel yanıtlar üçüncü şahıslarla
	paylaşılmayacaktır.
	Çalışmanın bilinen bir fiziksel veya psikolojik riski bulunmamaktadır.
	Uyaranlar standart multimedya düzeyindedir. Bu araştırmaya katılarak, insan
	algısı ve estetik tercihler üzerine yapılan bilimsel çalışmalara katkıda 
	bulunmuş olacaksınız.
	
	Deneye "OK" butonuna basarak başlayabilirsiniz.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sampler sound_3_sampler
	set volume 1
	set stop_after 0
	set sample "[sound_3]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description ".wav veya .ogg formatında bir ses dosyasını çalar"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Uyarıcıları görüntüler"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=70 html=yes show_if=True text="Deneye hoşgeldiniz." x=0 y=0 z_index=0

